PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = discounting_block
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Routines
  Routine fixFramed
    ImageComponent fixImg
      image [set every repeat] = $fixedImage
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $short_delay[block]
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    TextComponent text_4
      color = red
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $short_delay[block]
      text = Please wait, you are expriencing the delay!
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  Routine delayFramed
    ImageComponent delayImg
      image [set every repeat] = $delayImage
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $long_delay[block]
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    TextComponent text_3
      color = red
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $long_delay[block]
      text = Please wait, you are expriencing the delay!
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  Routine choiceScreen
    ImageComponent choiceImg
      image [set every repeat] = $choiceImage
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent choiceResp
      allowedKeys = '1', '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent choiceWarning
      color = red
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $tx
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    CodeComponent core_code
      Code Type = Auto->JS
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      Begin Experiment:
        intro = 0
        bb = 0
        total = 0
        block = 0
        nk = 0


        short_reward = [16,16,16,16,16]
        short_delay = [1,1,1,1,1]

        long_reward = [32,32, 32, 32, 32]
        long_delay = [3,1,15,30,7]


        h = 'start'
        n = 0

        a = [0,0,0,0]
      Begin Routine:
        left = 0
        right = 0
        if nk < 3:
            delta = 2
        else:
            delta = 1
      End Routine:
        thisExp.addData('small_reward', short_reward[block])
        thisExp.addData('Delay', long_delay[block])

        if (n % 2) == 0:
            left_delay = long_delay[block]
            right_delay = short_delay[block]
            if(choiceResp.keys == '1'):

                if(chanceLeft == 'You got it!'):
                    transparencyLeft = 1
                    total += long_reward[block]
                left = 1
                short_reward[block] = round(short_reward[block] + delta,2)
                h += choiceResp.keys


            elif(choiceResp.keys == '2'):
                if(chanceRight == 'You got it!'):
                    transparencyRight = 1
                    total += short_reward[block]
                right = 1
                short_reward[block] = round(short_reward[block] - delta,2)
                h += choiceResp.keys


        else:
            left_delay = short_delay[block]
            right_delay = long_delay[block]

            if(choiceResp.keys == '1'):
                if(chanceLeft == 'You got it!'):
                    transparencyLeft = 1
                    total += short_reward[block]
                left = 1
                short_reward[block] = round(short_reward[block] - delta,2)
                h += choiceResp.keys



            elif(choiceResp.keys == '2'):
                if(chanceRight == 'You got it!'):
                    transparencyRight= 1
                    total += long_reward[block]
                right = 1
                short_reward[block] = round(short_reward[block] + delta,2)
                h += choiceResp.keys

        if short_reward[block] > 30:
            short_reward[block] = 30
        elif short_reward[block] < 1:
            short_reward[block] = 1

        if block == 0:
            intro += 1
            if intro == 4:
                block +=1
                total = 0
                block_screen = 1
                bb = 1
                h = 'start'

        if h[-2:] == '11' or h[-2:] == '22' or short_reward[block] == 1 or short_reward[block] == 30:

            a[block-1] += short_reward[block]
            nk +=1

            if nk==6:
                a[block-1] = a[block-1] / 6

                block +=1
                h = 'start'
                block_screen = 1
                bb = 1
                nk = 0

        level = int(total/ 200)
        repeat_text = "total gain:" + str(round(total,2)) + " \n You are in level:" + str(level) + "\n press space to continue"

        if level > 0:
            if total < 800:
                tl [int(level -1)] = 1
    TextComponent text_5
      color = red
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press "1")                                              (press "2")
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  Routine choiceLeft
    ImageComponent leftImg
      image [set every repeat] = $choiceImageLeft
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $left_delay
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  Routine feedbackLeft
    ImageComponent rewardImgLeft
      image [set every repeat] = $rewardImageLeft
      opacity [set every repeat] = $transparencyLeft
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent rewardText
      color = red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $chanceLeft
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    CodeComponent extract_left
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('result of chosen',chanceLeft )
        thisExp.addData('delay of chosen', left_delay)
        thisExp.addData('reward of chosen', rewardLeft)

        thisExp.addData('total amount', total)
  Routine choiceRight
    ImageComponent rightImg
      image [set every repeat] = $choiceImageRight
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $right_delay
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  Routine feedbackRight
    ImageComponent rewardImgRight
      image [set every repeat] = $rewardImageRight
      opacity [set every repeat] = $transparencyRight
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent rightText
      color = red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $chanceRight
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    CodeComponent extract_right
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('result of chosen',chanceRight)
        thisExp.addData('delay of chosen', right_delay)
        thisExp.addData('reward of chosen', rewardRight)

        thisExp.addData('total amount', total)
  Routine repeatScreen
    ImageComponent block4
      image [set every repeat] = img/coffee.jpeg
      opacity [set every repeat] = $tl[3]
      pos = (0.5, -0.2)
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent block3
      image [set every repeat] = img/cake.jpeg
      opacity [set every repeat] = $tl[2]
      pos = (0.5, 0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent block2
      image [set every repeat] = img/gummi.jpeg
      opacity [set every repeat] = $tl[1]
      pos = (-0.5, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent block1
      image [set every repeat] = img/tea.jpeg
      opacity [set every repeat] = $tl[0]
      pos = (-0.5, 0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent repeatText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $repeat_text
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    KeyboardComponent repeatResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent finishing_code
      Code Type = Auto->JS
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      Begin Experiment:
        tl = [0,0,0,0]
      End Routine:
        if block == 5:
            discountingBlockLong.finished=True
  Routine endScreen
    TextComponent endText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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      text:
        The experiment is finished
                         Thank you!
    CodeComponent AUC
      Code Type = Auto->JS
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      Begin Routine:
        maxa = max(a[0], a[1], a[2], a[3])
        for i in range(4):
            a[i] = a[i] / maxa

        k = (6*(a[3]+a[0]) +  8*(a[3]+a[1]) + 15*(a[1]+a[2]) ) / (29*2)
        thisExp.addData('DelayFactor', k)
        #for extracting to csv I can do sum of this column
  Routine Initialization
    CodeComponent Intialization
      Code Type = Auto->JS
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      Begin Experiment:
        chance = ['You got it!', 'You did not get it!', 'You got it!','You did not get it!', 'You got it!', 'You got it!','You did not get it!','You got it!','You got it!' ]
      Begin Routine:
        if (n % 2) == 0:
            tx = str(long_reward[block])+'  for 67%'+'              '+str(short_reward[block])+'  for 100%'
            chanceLeft = chance[n%9]
            chanceRight = 'You got it!'
            transparencyRight = 1
            transparencyLeft = 0
            fixedImage = 'img/even_'+str(round(short_reward[block]/4))+'_square.png'
            delayImage = 'img/even_8_square_'+str(round(short_reward[block]/4))+'.png'
            choiceImage = 'img/even_choice_'+str(round(short_reward[block]/4))+'.png'
            choiceImageLeft = 'img/even_8_circle_'+str(round(short_reward[block]/4))+'.png'
            choiceImageRight = 'img/even_'+str(round(short_reward[block]/4))+'_circle.png'
            rewardImageLeft = 'img/8m&m.png'
            rewardImageRight = 'img/'+str(round(short_reward[block]/4))+'m&m.png'
            rewardLeft = long_reward[block]
            rewardRight = short_reward[block]
            block_screen = 0
        else:
            tx = str(short_reward[block])+'  for 100%'+'              '+str(long_reward[block])+'  for 67%'
            chanceLeft= 'You got it!'
            chanceRight= chance[n%9]
            transparencyRight = 0
            transparencyLeft = 1
            fixedImage = 'img/odd_'+str(round(short_reward[block]/4))+'_square.png'
            delayImage = 'img/odd_8_square_'+str(round(short_reward[block]/4))+'.png'
            choiceImage = 'img/odd_choice_'+str(round(short_reward[block]/4))+'.png'
            choiceImageLeft = 'img/odd_'+str(round(short_reward[block]/4))+'_circle.png'
            choiceImageRight = 'img/odd_8_circle_'+str(round(short_reward[block]/4))+'.png'
            rewardImageLeft = 'img/'+str(round(short_reward[block]/4))+'m&m.png'
            rewardImageRight = 'img/8m&m.png'
            rewardLeft = short_reward[block]
            rewardRight = long_reward[block]
            block_screen = 0
  Routine Block_screen
    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $ending_text
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_text
      Code Type = Auto->JS
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      Begin Experiment:
        ending_text = "You saw how easy it was?! \n\n Have you noticed the amount of delay that was different for small and large M&Ms? \n\n Their waiting duration will be presented at the beginning of the each 4 blocks of the game. \n\n You should know that you cannot increase the number of rounds by choosing the faster rewards. \n\n One more thing, for every 200 points you earn one hidden reward will be shown!  \n\n Press space to play the game for real!"
      End Routine:
        ending_text = "This block has ended. \n \nTo start and experience the delay of the next block, press space."
  Routine Instruction
    ImageComponent welcomeImage
      image [set every repeat] = $welcome_image
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent slide_changer
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent slide_changing
      Code Type = Py
      Before Experiment:
        slide = 1

        welcome_image = 'img/intro/1.png'
      Begin Routine:
        timer = core.Clock()
      Each Frame:
        if slide == 6:
            if timer.getTime() > 1:
                continueRoutine = False
        elif slide ==7:
            if timer.getTime() > 7:
                continueRoutine = False
        else:
            if (slide_changer.keys  == 'space' ):
                continueRoutine = False
      End Routine:
        slide +=1
        welcome_image = 'img/intro/' + str(slide) + '.png'
  Routine Try_out
    TextComponent welcome_text_2
      letterHeight = 0.03
      startVal [time (s)] = 8
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      text:
        You just saw an example of 1 second and 7 second choice.

        Furthermore, there are levels in the game. You get to the next level every time you collect 200 M&Ms.

        There are going to be 4 blocks.

        You will be informed once experiment is finished.
        Number of trials in the block is predefined – you can not have more trials and win more by choosing the shorter waiting duration.

        To choose options use:
        '1' for left option
        '2' for right option

        Press SPACE to start the game!”
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10
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    ImageComponent onesecond
      image = img/odd_4_square.png
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent seven_second
      image = img/odd_8_square_4.png
      size = (1.8, 1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 7
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    CodeComponent Tutorial
      Code Type = Py
  Routine Instruction_2
    TextComponent Intro_1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome dear participants

        This game is about collecting as much M&Ms as you can!

        Each time you must choose from fixed 32 M&Ms with probability of 2/3 or smaller amount of M&Ms with 100% probability.  The exact amount for each option is written on screen.

        Even if you are confused now, take it easy and try to play. It will get to you.

        Press 'space' to play it a bit for yourself..
    KeyboardComponent intro_1_ending
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine intro4choose
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You had exprienced the delay!

        Please press 'space' to start choosing again.
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        bb = 1
      Each Frame:
        bb = 0
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction_2
  LoopInitiator discountingBlockLong loopType="TrialHandler"
    loopType = sequential
    nReps = 200
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    Routine Initialization
    LoopInitiator blockbegin1 loopType="TrialHandler"
      loopType = random
      nReps = $bb
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      Routine fixFramed
    LoopTerminator blockbegin1
    LoopInitiator blockbegin0 loopType="TrialHandler"
      loopType = sequential
      nReps = $bb
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      Routine delayFramed
    LoopTerminator blockbegin0
    LoopInitiator blockbegin2 loopType="TrialHandler"
      loopType = sequential
      nReps = $bb
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      Routine intro4choose
    LoopTerminator blockbegin2
    Routine choiceScreen
    LoopInitiator choiceLeftLoop loopType="TrialHandler"
      loopType = random
      nReps = $left
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      Routine choiceLeft
      Routine feedbackLeft
    LoopTerminator choiceLeftLoop
    LoopInitiator choiceRightLoop loopType="TrialHandler"
      loopType = random
      nReps = $right
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      Routine choiceRight
      Routine feedbackRight
    LoopTerminator choiceRightLoop
    Routine repeatScreen
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = $block_screen
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      Routine Block_screen
    LoopTerminator trials
  LoopTerminator discountingBlockLong
  Routine endScreen
